<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PWMport" />
        <Property Name="duration" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialiseVars</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>duration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LeftF" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentLeftFreq</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RightF" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentRightFreq</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TargetSide</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="PWMport" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>ArdPWM</io:Name>
                <io:PortName>COM3</io:PortName>
                <io:BaudRate>115200</io:BaudRate>
                <io:Encoding>us-ascii</io:Encoding>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>true</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateDiscreteUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>1</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Correct?</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:StaircaseProcedure">
          <p2:InitialIntensity>10</p2:InitialIntensity>
          <p2:StepSize>1</p2:StepSize>
          <p2:MinIntensity>0</p2:MinIntensity>
          <p2:MaxIntensity>100</p2:MaxIntensity>
          <p2:CorrectRule>2</p2:CorrectRule>
          <p2:IncorrectRule>1</p2:IncorrectRule>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Intensity</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentFrequency</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Sample" />
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>isLeft</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CurrentLeftFreq</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>200</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CurrentRightFreq</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>isRight</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CurrentRightFreq</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>200</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CurrentLeftFreq</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TargetSide</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Reversals</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>duration</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.ToString()</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentLeftFreq</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.ToString()</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentRightFreq</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.ToString()</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0,0,1,1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StimulusStringCode" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>it.Item2.Item1+","+it.Item2.Item2+","+it.Item1.Item1+","+it.Item1.Item2+","+it.Item2.Item3</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item1+","+it.Item2+","+it.Item3.Item1+","+it.Item3.Item2+","+it.Item4</scr:Expression>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="Min ISI" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Skip">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArdPWM</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ArdPWM</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Retry" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>duration</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="FloatProperty">
                <Value>100</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timeout">
                <rx:DueTime>PT1.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Catch" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StimEnded</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TargetSide</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Response</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Correct?</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringRead">
            <io:PortName>ArdPWM</io:PortName>
            <io:NewLine>\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Parse">
          <Pattern>%i</Pattern>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Retry" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Equal">
                <Operand xsi:type="IntProperty">
                  <Value>-1</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>StimEnded</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>duration</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Add">
          <Operand xsi:type="FloatProperty">
            <Value>100</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="DueTime" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimEnded</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GetResponse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>L</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Response</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timeout">
            <rx:DueTime>PT1.1S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Catch" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="7" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="26" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="19" Label="Source1" />
      <Edge From="13" To="24" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="37" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="33" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="37" Label="Source3" />
      <Edge From="34" To="37" Label="Source4" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="40" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="49" To="51" Label="Source2" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="55" To="68" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="66" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="68" Label="Source2" />
      <Edge From="64" To="70" Label="Source2" />
      <Edge From="65" To="66" Label="Source2" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>